WorkflowBuilder(Version=2.9.1-dev0+b2162b13f39880688f6492b2c3dd22e2b3597a89)
Disable GroupWorkflow Camera
    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #1
    ExternalizedMapping(SerialNumber(DisplayName=CameraSeriaNumber)) => #2
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.Exposure)
    -> PropertyMapping(ExposureTime) => #5
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.Gain)
    -> PropertyMapping(Gain) => #8
    #1, #2, #5, #8 -> Aeon.Video.SpinnakerCapture(Index=nil, SerialNumber=24282626, ColorProcessing=Default, ExposureTime=15000, Gain=10, Binning=1, TriggerSource=Line3)
    -> PublishSubject CameraStream
    -> WorkflowOutput

Disable GroupWorkflow Logging
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.LoggingRootPath)
    -> PropertyMapping(Path)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=C:\temp, ChunkSize=1)

    SubscribeSubject SessionSettings => #4
    SubscribeSubject BehaviorEvents => #5
    #4, #5 -> SubscribeWhen
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=SessionSettings)
    -> Take(Count=1)

    SubscribeSubject CurrentSequences => #10
    SubscribeSubject BehaviorEvents => #11
    #10, #11 -> SubscribeWhen
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=Schema)
    -> Take(Count=1)

    Disable SubscribeSubject EegStream
    -> Disable IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Disable IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=EegStreamEvents, Selector=nil)

    SubscribeSubject EventsO0
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Olfactometer0, Heartbeats=BehaviorEvents, ClosingDuration=nil)

    SubscribeSubject EventsO1
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Olfactometer1, Heartbeats=BehaviorEvents, ClosingDuration=nil)

    SubscribeSubject BehaviorEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Behavior, Heartbeats=BehaviorEvents, ClosingDuration=nil)

    SubscribeSubject ExperimentEvents
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=ExperimentEvents, Selector=nil)

    SubscribeSubject BehaviorCommands
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=BehaviorCommands, Selector=nil)

    SubscribeSubject CameraStream => #31
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.FrameRate)
    -> PropertyMapping(FrameRate) => #34
    #31, #34 -> IncludeWorkflow(Path=Aeon.Video:LogVideo.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=VideoData, FrameRate=60)

    Disable SubscribeSubject BehaviorNotifications
    -> Disable IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> Disable IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=BehaviorNotifications, Selector=nil)

    SubscribeSubject DetectedObject
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=DetectedObject, Selector=nil)

GroupWorkflow Behavior
    ExternalizedMapping(PortName)
    -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM5)
    -> Timeout(DueTime=PT0.1S)
    -> PublishSubject BehaviorEvents
    -> WorkflowOutput

    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands
    -> RateLimiter(MessageDelay=PT0.05S)

    BooleanProperty(Value=false)
    -> BehaviorSubject CurrentSampleState

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.PortDIOStateEvent) => #10
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO1))
    -> DistinctUntilChanged
    -> PublishSubject DI0
    #10 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO2))
    -> DistinctUntilChanged
    -> PublishSubject DI1

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #18
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0)) => #20
    #18 -> MemberSelector(Selector=Seconds) => #21
    #20, #21 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> DistinctUntilChanged => #24
    -> Condition Onset
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> Equal(Operand=WorkflowProperty<System.Byte>(Value=1))
        -> WorkflowOutput
    -> PublishSubject SampleOnset
    #24 -> Condition Offset
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
        -> WorkflowOutput
    -> PublishSubject SampleOffset

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.DigitalInputState)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1))
    -> Equal(Operand=WorkflowProperty<System.Byte>(Value=2))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject RewardPort0

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=SupplyPort0))
    -> MulticastSubject BehaviorCommands

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=SupplyPort1))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.DigitalInputState)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort2))
    -> Equal(Operand=WorkflowProperty<System.Byte>(Value=4))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject RewardPort1

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable="SupplyPort0 SupplyPort1 SupplyPort2")) => #45
    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2")) => #46
    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEventEnablePayload(EventEnable="PortDI PortDIO AnalogData Camera0")) => #47
    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePokeInputFilterPayload(PokeInputFilter=30)) => #48
    #45, #46, #47, #48 -> Concat
    -> MulticastSubject BehaviorCommands

    BehaviorSubject<DataSchema.RewardCommand> RewardCommand
    -> SelectMany Reward
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Command

        SubscribeSubject Command
        -> Condition RewardLocation1 => #4
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardPosition)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject Command
        -> MemberSelector(Selector=RewardTime)
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> PropertyMapping(PulseSupplyPort1) => #8
        #4, #8 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort1Payload(PulseSupplyPort1=130))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort1))
        -> MulticastSubject BehaviorCommands => #12
        SubscribeSubject Command
        -> Condition RewardLocation2 => #14
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardPosition)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        SubscribeSubject Command
        -> MemberSelector(Selector=RewardTime)
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> PropertyMapping(PulseSupplyPort2) => #18
        #14, #18 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort2Payload(PulseSupplyPort2=130))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort2))
        -> MulticastSubject BehaviorCommands => #22
        #12, #22 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput

GroupWorkflow Olfactometer
    BehaviorSubject<Bonsai.Harp.HarpMessage> CommandsO0 => #0
    ExternalizedMapping(PortName(DisplayName=PortO0)) => #1
    #0, #1 -> Harp.Olfactometer.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM7) => #2
    ExternalizedMapping(Name(DisplayName=EventsO0)) => #3
    #2, #3 -> PublishSubject EventsO0 => #4
    BehaviorSubject<Bonsai.Harp.HarpMessage> CommandsO1 => #5
    ExternalizedMapping(PortName(DisplayName=PortO1)) => #6
    #5, #6 -> Harp.Olfactometer.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3) => #7
    ExternalizedMapping(Name(DisplayName=EventsO1)) => #8
    #7, #8 -> PublishSubject EventsO1 => #9
    #4, #9 -> Merge => #10
    ExternalizedMapping(Name(DisplayName=OlfactometerEvents)) => #11
    #10, #11 -> PublishSubject OlfactometerEvents
    -> WorkflowOutput

    ExternalizedMapping(Name(DisplayName=SessionSettings))
    -> SubscribeSubject SessionSettings
    -> MemberSelector(Selector=OlfactometerCommands)
    -> Concat => #17
    -> CreateObservable OlfactometerCommand => #18
        WorkflowInput Source1 => #0
        -> ParseOlfactometerBitmask => #1
        -> MemberSelector(Selector=ValvesO0) => #2
        -> PropertyMapping(OdorValveState) => #3
        #2, #3 -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateOdorValveStatePayload(OdorValveState=None))
        -> MulticastSubject CommandsO0
        -> Take(Count=4) => #6
        #1 -> MemberSelector(Selector=ValvesO1) => #7
        -> PropertyMapping(OdorValveState) => #8
        #7, #8 -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateOdorValveStatePayload(OdorValveState=Valve3))
        -> MulticastSubject CommandsO1
        -> Take(Count=1) => #11
        #1 -> MemberSelector(Selector=EndValvesO0) => #12
        -> PropertyMapping(EndValveState) => #13
        #12, #13 -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEndValveStatePayload(EndValveState=None))
        -> MulticastSubject CommandsO0
        -> Take(Count=4) => #16
        #1 -> MemberSelector(Selector=EndValvesO1) => #17
        -> PropertyMapping(EndValveState) => #18
        #17, #18 -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEndValveStatePayload(EndValveState=EndValve0))
        -> MulticastSubject CommandsO1
        -> Take(Count=1) => #21
        #0 -> MemberSelector(Selector=TargetFlowO0)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new (
              it[0] as Channel0,
              it[1] as Channel1,
              it[2] as Channel2,
              it[3] as Channel3,
              it[4] as Channel4
            )
        -> InputMapping(Channel0(Selector=Channel0), Channel1(Selector=Channel1), Channel2(Selector=Channel2), Channel3(Selector=Channel3), Channel4(Selector=Channel4))
        -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannelsTargetFlowPayload(Channel0=0, Channel1=0, Channel2=0, Channel3=0, Channel4=400))
        -> MulticastSubject CommandsO0
        -> Take(Count=1) => #27
        #0 -> MemberSelector(Selector=TargetFlowO1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new (
              it[0] as Channel0,
              it[1] as Channel1,
              it[2] as Channel2,
              it[3] as Channel3,
              it[4] as Channel4
            )
        -> InputMapping(Channel0(Selector=Channel0), Channel1(Selector=Channel1), Channel2(Selector=Channel2), Channel3(Selector=Channel3), Channel4(Selector=Channel4))
        -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateChannelsTargetFlowPayload(Channel0=0, Channel1=0, Channel2=0, Channel3=100, Channel4=400))
        -> MulticastSubject CommandsO1
        -> Take(Count=1) => #33
        Source1=#6, Source2=#11, Source3=#16, Source4=#21, Source6=#27, Source7=#33 -> Merge
        -> WorkflowOutput
    #17 -> MemberSelector(Selector=Name) => #19
    #18, #19 -> Zip
    -> ToDictionary(KeySelector=Item2, ElementSelector=Item1)
    -> AsyncSubject CommandDictionary

    ExternalizedMapping(Name(DisplayName=OlfactometerCommand))
    -> BehaviorSubject<System.String> OlfactometerCommand => #24
    SubscribeSubject CommandDictionary => #25
    #24, #25 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #27
    #24 -> PropertyMapping(Value) => #28
    #27, #28 -> Index(Operand=StringProperty(Value=Purge))
    -> Merge

    Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Enabled))
    -> MulticastSubject CommandsO0

    Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Enabled))
    -> MulticastSubject CommandsO1

Disable GroupWorkflow EEG
    UdpSource(GroupAddress=239.255.76.67, Port=8866)
    -> PublishSubject EegStream
    -> WorkflowOutput

Disable GroupWorkflow Tracking
    SubscribeSubject CameraStream
    -> MemberSelector(Selector=Value.Image)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=40, MaxValue=255, ThresholdType=BinaryInv) => #3
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties)
    -> MemberSelector(Selector=RoiSourcePoints)
    -> MemberSelector(Selector=Points)
    -> ConvertPoints
    -> PropertyMapping(Regions) => #9
    #3, #9 -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=210, Y=600), Point(X=210, Y=700), Point(X=1070, Y=700), Point(X=1070, Y=600))), Operation=Sum)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> Take(Count=15)
    -> Average
    -> Repeat
    -> BehaviorSubject RoiMovingAverage

    SubscribeSubject CameraStream
    -> MemberSelector(Selector=Value.Image)
    -> Bonsai.Vision.Grayscale
    -> Bonsai.Vision.Threshold(ThresholdValue=40, MaxValue=255, ThresholdType=BinaryInv) => #20
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties)
    -> MemberSelector(Selector=RoiSourcePoints)
    -> MemberSelector(Selector=Points)
    -> ConvertPoints
    -> PropertyMapping(Regions) => #26
    #20, #26 -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=210, Y=600), Point(X=210, Y=700), Point(X=1070, Y=700), Point(X=1070, Y=600))), Operation=Sum)
    -> Index(Operand=IntProperty(Value=0))
    -> MemberSelector(Selector=Activity.Val0)
    -> BehaviorSubject RoiIntensity

    SubscribeSubject RoiIntensity => #31
    SubscribeSubject RoiMovingAverage => #32
    #31, #32 -> WithLatestFrom
    -> Divide => #34
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties)
    -> MemberSelector(Selector=Threshold)
    -> PropertyMapping(Value) => #38
    #34, #38 -> GreaterThan(Operand=DoubleProperty(Value=3))
    -> PublishSubject DetectedObject

ExternalizedMapping(Path(DisplayName=SessionSettingsPath))
-> LoadSessionSettings(Path=Schemas\rig3-session-settings.yml)
-> Take(Count=1)
-> AsyncSubject SessionSettings

SubscribeSubject SessionSettings
-> MemberSelector(Selector=Metadata.InitialSequence) => #11
BehaviorSubject<System.String> LoadNewSequence => #12
#11, #12 -> Merge
-> SelectMany LoadSequence
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject Path

    SubscribeSubject Path
    -> PropertyMapping(Path)
    -> SequenceSelector(Path=Schemas/doubles-option1-stage1.yml)
    -> Take(Count=1)
    -> WorkflowOutput
-> BehaviorSubject CurrentSequences

Bonsai.Numerics.CreateRandom(Seed=nil)
-> BehaviorSubject RandomSource

ExternalizedMapping(Filter(DisplayName=StartCameraKey))
-> Bonsai.Windows.Input.KeyDown(Filter=S, SuppressRepetitions=false) => #19
SubscribeSubject SessionSettings
-> MemberSelector(Selector=CameraProperties.FrameRate)
-> PropertyMapping(Camera0Frequency) => #22
#19, #22 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera0FrequencyPayload(Camera0Frequency=60))
-> MulticastSubject BehaviorCommands
-> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0))
-> MulticastSubject BehaviorCommands

GroupWorkflow SustainedPokes
    SubscribeSubject SampleOnset => #0
    SubscribeSubject FakeSampleOnset => #1
    #0, #1 -> Merge => #2
    -> BooleanProperty(Value=true) => #3
    #2 -> MemberSelector(Selector=Seconds) => #4
    #3, #4 -> Zip
    -> Bonsai.Harp.CreateTimestamped => #6
    SubscribeSubject SampleOffset => #7
    SubscribeSubject FakeSampleOffset => #8
    #7, #8 -> Merge => #9
    -> BooleanProperty(Value=false) => #10
    #9 -> MemberSelector(Selector=Seconds) => #11
    #10, #11 -> Zip
    -> Bonsai.Harp.CreateTimestamped => #13
    #6, #13 -> Merge
    -> Disable ObserveOn(Scheduler=TaskPoolScheduler) => #15
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.MinimumSampleTime)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #19
    #15, #19 -> Throttle(DueTime=PT0.05S)
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> WorkflowOutput
    -> PublishSubject SustainedSampleOnset
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.SampleOffsetTime)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #26
    #15, #26 -> Throttle(DueTime=PT0.5S)
    -> Condition
        WorkflowInput Source1
        -> MemberSelector(Selector=Value)
        -> BitwiseNot
        -> WorkflowOutput
    -> PublishSubject SustainedSampleOffset

    Disable SubscribeSubject SampleOnset => #30
    Disable SubscribeSubject FakeSampleOnset => #31
    #30, #31 -> Disable Merge => #32
    Disable SubscribeSubject SessionSettings
    -> Disable MemberSelector(Selector=Metadata.MinimumSampleTime)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> Disable PropertyMapping(DueTime) => #36
    #32, #36 -> Disable Delay(DueTime=PT0.05S) => #37
    Disable SubscribeSubject SampleOffset => #38
    Disable SubscribeSubject FakeSampleOffset => #39
    #38, #39 -> Disable Merge => #40
    #37, #40 -> Disable TakeUntil
    -> Disable Repeat
    -> Disable PublishSubject SustainedSampleOnset

    Disable SubscribeSubject SampleOffset => #44
    Disable SubscribeSubject FakeSampleOffset => #45
    #44, #45 -> Disable Merge => #46
    Disable SubscribeSubject SessionSettings
    -> Disable MemberSelector(Selector=Metadata.SampleOffsetTime)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> Disable PropertyMapping(DueTime) => #50
    #46, #50 -> Disable Delay(DueTime=PT0.2S) => #51
    Disable SubscribeSubject SampleOnset => #52
    Disable SubscribeSubject FakeSampleOnset => #53
    #52, #53 -> Disable Merge => #54
    #51, #54 -> Disable TakeUntil
    -> Disable Repeat
    -> Disable PublishSubject SustainedSampleOffset

    SubscribeSubject SustainedSampleOnset => #58
    SubscribeSubject SustainedSampleOffset => #59
    BooleanProperty(Value=false)
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #61
    #58, #59, #61 -> Merge
    -> BehaviorSubject SustainedSampleState

    Bonsai.Numerics.CreateRandom(Seed=0)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=2)
    -> BehaviorSubject Random

    BehaviorSubject<System.Reactive.Unit> DoSample => #67
    Unit => #68
    #67, #68 -> Merge
    -> SelectMany WAIT
        WorkflowInput Source1 => #0
        SubscribeSubject Random => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Numerics.Distributions.Sample
        -> Take(Count=1)
        -> AsyncSubject Delay

        Unit => #7
        SubscribeSubject Delay
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #10
        #7, #10 -> Delay(DueTime=PT1.229S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> ByteProperty(Value=1)
    -> IncludeWorkflow OlfactometerEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> PublishSubject FakeSampleOnset
    -> SelectMany WAIT
        WorkflowInput Source1 => #0
        SubscribeSubject Random => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Numerics.Distributions.Sample
        -> Take(Count=1)
        -> AsyncSubject Delay

        Unit => #7
        SubscribeSubject Delay
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #10
        #7, #10 -> Delay(DueTime=PT1.135S)
        -> Take(Count=1)
        -> WorkflowOutput
    -> ByteProperty(Value=0)
    -> IncludeWorkflow OlfactometerEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> PublishSubject FakeSampleOffset
    -> Unit
    -> MulticastSubject DoSample

BehaviorSubject<System.Boolean> TrialCorrectResult
-> Bonsai.Scripting.Expressions.ExpressionTransform => #29
  Expression: Convert.ToInt32(it)
SubscribeSubject SessionSettings
-> MemberSelector(Selector=Metadata.PerformanceAverageWindow)
-> PropertyMapping(Count) => #32
#29, #32 -> Bonsai.Dsp.Buffer(Count=5, Skip=1)
-> Bonsai.Dsp.Average => #34
SubscribeSubject CurrentSequences
-> Skip(Count=1) => #36
#34, #36 -> TakeUntil
-> Repeat
-> BehaviorSubject PerformanceAverage

SubscribeSubject CurrentSequences
-> Take(Count=1)
-> MemberSelector(Selector=Sequences)
-> Merge
-> CreateObservable SequenceProgression
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject SequenceSelections

    SubscribeSubject SequenceSelections
    -> Sink SetDefault
        WorkflowInput Source1
        -> StringProperty(Value=Default)
        -> MulticastSubject OlfactometerCommand
        -> WorkflowOutput
    -> SelectMany ChooseRandomSequence => #5
        WorkflowInput Source1 => #0
        -> UniformSampleList => #1
        #0 -> StringProperty(Value=ChooseRandomSequence)
        -> MulticastSubject ExperimentEvents => #3
        #1, #3 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany SampleRewardCondition => #6
        WorkflowInput Source1
        -> MemberSelector(Selector=RewardConditions)
        -> Take(Count=1)
        -> AsyncSubject RewardConditions
        -> StringProperty(Value=SampleRewardCondition)
        -> MulticastSubject ExperimentEvents

        SubscribeSubject RandomSource => #6
        SubscribeSubject RewardConditions
        -> MemberSelector(Selector=Count)
        -> Subtract(Operand=IntProperty(Value=1))
        -> PropertyMapping(Upper) => #10
        #6, #10 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=0)
        -> Bonsai.Numerics.Distributions.Sample
        -> Take(Count=1)
        -> WorkflowOutput
    #6, #5 -> Zip
    -> SelectMany InitiationSequence
        WorkflowInput Source1
        -> Take(Count=1)
        -> Sink EnableTrialStartIndicator
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.EnableTrialStartIndicator)
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
            -> MulticastSubject BehaviorCommands
            -> WorkflowOutput
        -> AsyncSubject SequenceInfo
        -> StringProperty(Value=InitiationSequence)
        -> MulticastSubject ExperimentEvents

        SubscribeSubject SequenceInfo => #6
        -> Condition R1
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2.RewardConditions)
        -> Index(Operand=IntProperty(Value=0)) => #9
        #6 -> Condition R2
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2.RewardConditions)
        -> Index(Operand=IntProperty(Value=1)) => #12
        #9, #12 -> Merge => #13
        -> MemberSelector(Selector=Definition)
        -> Merge
        -> UniformSampleList => #16
        #13 -> MemberSelector(Selector=Position) => #17
        #16, #17 -> WithLatestFrom
        -> ElementIndex
        -> CreateObservable PresentStimulus
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Valence

            BehaviorSubject<Bonsai.Harp.Timestamped(System.Boolean)> CurrentInitiationTime

            SubscribeSubject Valence
            -> SelectMany AwaitOnset
                WorkflowInput Source1

                SubscribeSubject BehaviorEvents => #1
                SubscribeSubject SustainedSampleState
                -> MemberSelector(Selector=Value) => #3
                #1, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> IncludeWorkflow OlfactometerEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Take(Count=1)
                -> AsyncSubject AlreadySampling

                SubscribeSubject SustainedSampleOnset => #9
                -> BooleanProperty(Value=true) => #10
                #9 -> MemberSelector(Selector=Seconds) => #11
                #10, #11 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #13
                SubscribeSubject AlreadySampling
                -> Condition AlreadySampling => #15
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> WorkflowOutput
                #13, #15 -> Merge
                -> Take(Count=1)
                -> WorkflowOutput
            -> MulticastSubject CurrentInitiationTime
            -> SelectMany DeliverOdor => #7
                WorkflowInput Source1

                SubscribeSubject Valence
                -> MemberSelector(Selector=Value.Item1.Command)
                -> MulticastSubject OlfactometerCommand => #3
                SubscribeSubject Valence
                -> MemberSelector(Selector=Value.Item1.MaximumSamplingTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #7
                #3, #7 -> Delay(DueTime=PT1S) => #8
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=Item2.InterCommand)
                -> PropertyMapping(Value) => #11
                #8, #11 -> StringProperty(Value=Purge)
                -> MulticastSubject OlfactometerCommand => #13
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=Item2.InterCommandTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #17
                #13, #17 -> Delay(DueTime=PT0.2S)
                -> Take(Count=1)
                -> WorkflowOutput
            Disable SubscribeSubject LessThanSamplePeriod
            -> Disable Condition FirstInSequence => #9
                WorkflowInput Source1 => #0
                SubscribeSubject Valence => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2.Index)
                -> Equal(Operand=DoubleProperty(Value=0))
                -> WorkflowOutput
            #7, #9 -> Disable TakeUntil
            -> BehaviorSubject PresentationComplete
            -> Disable Repeat

            SubscribeSubject SustainedSampleOffset
            -> MemberSelector(Selector=Seconds) => #14
            SubscribeSubject CurrentInitiationTime
            -> MemberSelector(Selector=Seconds) => #16
            #14, #16 -> WithLatestFrom
            -> Subtract
            -> Condition LessThanMinimum
                WorkflowInput Source1 => #0
                SubscribeSubject Valence
                -> MemberSelector(Selector=Value.Item1.MinimumSamplingTime)
                -> PropertyMapping(Value) => #3
                #0, #3 -> LessThan(Operand=DoubleProperty(Value=0.3))
                -> WorkflowOutput
            -> PublishSubject LessThanSamplePeriod

            SubscribeSubject SustainedSampleOffset
            -> MemberSelector(Selector=Seconds) => #22
            SubscribeSubject CurrentInitiationTime
            -> MemberSelector(Selector=Seconds) => #24
            #22, #24 -> WithLatestFrom
            -> Subtract
            -> Condition WithinSamplingPeriod
                WorkflowInput Source1 => #0
                SubscribeSubject Valence
                -> MemberSelector(Selector=Value.Item1.MinimumSamplingTime)
                -> PropertyMapping(Value) => #3
                #0, #3 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.3)) => #4
                SubscribeSubject Valence
                -> MemberSelector(Selector=Value.Item1.MaximumSamplingTime)
                -> Add(Operand=DoubleProperty(Value=0.1))
                -> PropertyMapping(Value) => #8
                #8, #0 -> LessThan(Operand=DoubleProperty(Value=1.1)) => #9
                #4, #9 -> Zip
                -> BitwiseAnd
                -> WorkflowOutput
            -> BehaviorSubject WithinSamplePeriod

            SubscribeSubject SustainedSampleOffset
            -> Disable Condition NotFirstInSequence
                WorkflowInput Source1 => #0
                SubscribeSubject Valence => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2.Index)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> StringProperty(Value=Purge)
            -> MulticastSubject OlfactometerCommand

            SubscribeSubject Valence
            -> Condition NotFirstInSequence => #34
                WorkflowInput Source1
                -> MemberSelector(Selector=Index)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=Metadata.MaximumInterOdourPokeTime)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #38
            #34, #38 -> Delay(DueTime=PT2S)
            -> AsyncSubject Timeout

            SubscribeSubject PresentationComplete => #41
            -> BooleanProperty(Value=false) => #42
            #41 -> BooleanProperty(Value=true) => #43
            #42, #43 -> Zip => #44
            SubscribeSubject WithinSamplePeriod => #45
            -> BooleanProperty(Value=true) => #46
            #45 -> BooleanProperty(Value=true) => #47
            #46, #47 -> Zip => #48
            SubscribeSubject Timeout => #49
            -> BooleanProperty(Value=true) => #50
            #49 -> BooleanProperty(Value=false) => #51
            #50, #51 -> Zip => #52
            SubscribeSubject LessThanSamplePeriod
            -> Condition NotFirstInSequence => #54
                WorkflowInput Source1 => #0
                SubscribeSubject Valence => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2.Index)
                -> GreaterThan(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> BooleanProperty(Value=true) => #55
            #54 -> BooleanProperty(Value=false) => #56
            #55, #56 -> Zip => #57
            #44, #48, #52, #57 -> Merge
            -> Take(Count=1) => #59
            SubscribeSubject Valence
            -> MemberSelector(Selector=Value) => #61
            #59, #61 -> CombineLatest
            -> WorkflowOutput
        -> Concat
        -> BehaviorSubject PresentationResult => #22
        SubscribeSubject SequenceInfo
        -> Sink EnableTrialStartIndicator => #24
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.EnableTrialStartIndicator)
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
            -> MulticastSubject BehaviorCommands
            -> WorkflowOutput
        #22, #24 -> WithLatestFrom
        -> MemberSelector(Selector=Item1)
        -> Condition SequenceCompleteCheck
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1.Item1)
            -> BitwiseNot => #2
            #0 -> MemberSelector(Selector=Item1.Item2) => #3
            #2, #3 -> Zip
            -> BitwiseAnd => #5
            #0 -> MemberSelector(Selector=Item1.Item1) => #6
            #0 -> MemberSelector(Selector=Item1.Item2) => #7
            #6, #7 -> Zip
            -> BitwiseAnd => #9
            #5, #9 -> Zip
            -> BitwiseOr => #11
            #0 -> MemberSelector(Selector=Item2.Item1.Index) => #12
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.SequenceLengthIndex) => #14
            #12, #14 -> WithLatestFrom
            -> Subtract
            -> Equal(Operand=IntProperty(Value=0)) => #17
            #11, #17 -> Zip
            -> BitwiseAnd
            -> WorkflowOutput
        -> BehaviorSubject SequenceComplete

        SubscribeSubject PresentationResult
        -> MemberSelector(Selector=Item2.Item1.Index)
        -> Equal(Operand=IntProperty(Value=0))
        -> BitwiseNot => #32
        SubscribeSubject PresentationResult => #33
        -> MemberSelector(Selector=Item1.Item1) => #34
        #33 -> MemberSelector(Selector=Item1.Item2)
        -> BitwiseNot => #36
        #34, #36 -> Zip
        -> BitwiseAnd => #38
        #32, #38 -> Zip
        -> BitwiseAnd => #40
        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=Item2.CompletionRequiresEngagement)
        -> BitwiseNot => #43
        #40, #43 -> WithLatestFrom
        -> BitwiseAnd
        -> Condition CompletionConditionsMet => #46
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject PresentationResult => #47
        #46, #47 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #49
        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=Item2) => #51
        #49, #51 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #53
          Expression:
            new (
            it.Item1.Item2 as RewardInfo,
            it.Item2 as Sequence,
            it.Item1.Item1.Item2 as TrialComplete
            )
        SubscribeSubject SequenceInfo => #54
        -> Condition SkipSampling
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.SkipSampling)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2.RewardConditions) => #56
        #54 -> MemberSelector(Selector=Item1)
        -> PropertyMapping(Value) => #58
        #56, #58 -> Index(Operand=IntProperty(Value=0)) => #59
        -> SequenceSchema.Valence(Rewarded=true, MinimumSamplingTime=0, MaximumSamplingTime=0, Index=0) => #60
        #59 -> MemberSelector(Selector=Position) => #61
        #60, #61 -> Zip => #62
        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=Item2) => #64
        #62, #64 -> WithLatestFrom => #65
        BooleanProperty(Value=true) => #66
        #65, #66 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #68
          Expression:
            new (
            it.Item1.Item1 as RewardInfo,
            it.Item1.Item2 as Sequence,
            it.Item2 as TrialComplete
            )
        SubscribeSubject SequenceComplete
        -> MemberSelector(Selector=Item2) => #70
        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=Item2) => #72
        #70, #72 -> WithLatestFrom => #73
        BooleanProperty(Value=true) => #74
        #73, #74 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #76
          Expression:
            new (
            it.Item1.Item1 as RewardInfo,
            it.Item1.Item2 as Sequence,
            it.Item2 as TrialComplete
            )
        Disable SubscribeSubject DetectedObject
        -> Disable Condition => #78
            WorkflowInput Source1
            -> WorkflowOutput
        Disable SubscribeSubject PresentationResult => #79
        -> Disable MemberSelector(Selector=Item1.Item1) => #80
        #79 -> Disable MemberSelector(Selector=Item1.Item2) => #81
        #80, #81 -> Disable Zip
        -> Disable BitwiseAnd => #83
        Disable SubscribeSubject PresentationResult
        -> Disable MemberSelector(Selector=Item2.Item1.Rewarded) => #85
        #83, #85 -> Disable WithLatestFrom
        -> Disable BitwiseAnd => #87
        #78, #87 -> Disable WithLatestFrom
        -> Disable BitwiseAnd
        -> Disable Condition MidsequenceCompletionConditionsMet => #90
            WorkflowInput Source1
            -> WorkflowOutput
        Disable SubscribeSubject PresentationResult => #91
        #90, #91 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2.Item2.Item1) => #93
        Disable SubscribeSubject SequenceInfo
        -> Disable MemberSelector(Selector=Item2) => #95
        #93, #95 -> Disable WithLatestFrom => #96
        Disable BooleanProperty(Value=true) => #97
        #96, #97 -> Disable WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #99
          Expression:
            new (
            it.Item1.Item1 as RewardInfo,
            it.Item1.Item2 as Sequence,
            it.Item2 as TrialComplete
            )
        #53, #68, #76, #99 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject SustainedSampleOnset => #103
        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=Item2.EnableTrialStartIndicator)
        -> Condition => #106
            WorkflowInput Source1
            -> WorkflowOutput
        #103, #106 -> WithLatestFrom
        -> BooleanProperty(Value=true)
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DOPort0))
        -> MulticastSubject BehaviorCommands

        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=Item2.enableTrialEndIndicator)
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
        -> MulticastSubject BehaviorCommands
    -> SelectMany EndInitiation => #9
        WorkflowInput Source1 => #0
        -> StringProperty(Value=EndInitiation)
        -> MulticastSubject ExperimentEvents
        -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DOPort0))
        -> MulticastSubject BehaviorCommands => #6
        #6, #0 -> Zip
        -> MemberSelector(Selector=Item2)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Condition TrialValid
        WorkflowInput Source1
        -> MemberSelector(Selector=TrialComplete)
        -> WorkflowOutput
    -> SelectMany ActivateReward
        WorkflowInput Source1 => #0
        -> Condition RewardIndicatorsEnabled => #1
            WorkflowInput Source1
            -> MemberSelector(Selector=Sequence.EnableRewardLocationIndicator)
            -> WorkflowOutput
        -> Condition R1
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardInfo.Item2)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort1))
        -> MulticastSubject BehaviorCommands => #4
        #1 -> Condition R2
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardInfo.Item2)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort2))
        -> MulticastSubject BehaviorCommands => #7
        #4, #7 -> Merge
        -> BooleanProperty(Value=true) => #9
        #9, #1 -> Zip => #10
        #0 -> Condition RewardIndicatorsDisabled => #11
            WorkflowInput Source1
            -> MemberSelector(Selector=Sequence.EnableRewardLocationIndicator)
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #12
        #12, #11 -> Zip => #13
        #10, #13 -> Merge
        -> Take(Count=1)
        -> MemberSelector(Selector=Item2)
        -> WorkflowOutput
        #1 -> StringProperty(Value=ActivateReward)
        -> MulticastSubject ExperimentEvents
    -> SelectMany AwaitReward
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject RewardInfo
        -> StringProperty(Value=AwaitReward)
        -> MulticastSubject ExperimentEvents

        SubscribeSubject RewardPort0 => #5
        SubscribeSubject RewardInfo => #6
        #5, #6 -> WithLatestFrom => #7
        -> Condition R1 => #8
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.RewardInfo.Item2)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.RewardTime)
        -> PropertyMapping(RewardTime) => #11
        #8, #11 -> DataSchema.RewardCommand(RewardTime=0.13, RewardPosition=0)
        -> MulticastSubject RewardCommand
        -> BooleanProperty(Value=true) => #14
        #7 -> Condition R2
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.RewardInfo.Item2)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> Condition MaxAttempts
            WorkflowInput Source1 => #0
            SubscribeSubject Attempts => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            SubscribeSubject RewardInfo
            -> MemberSelector(Selector=Sequence.RewardAttempts) => #5
            #3, #5 -> Zip
            -> GreaterThanOrEqual
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #17
        SubscribeSubject RewardPort1 => #18
        SubscribeSubject RewardInfo => #19
        #18, #19 -> WithLatestFrom => #20
        -> Condition R2 => #21
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.RewardInfo.Item2)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.RewardTime)
        -> PropertyMapping(RewardTime) => #24
        #21, #24 -> DataSchema.RewardCommand(RewardTime=0.13, RewardPosition=1)
        -> MulticastSubject RewardCommand
        -> BooleanProperty(Value=true) => #27
        #20 -> Condition R1
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2.RewardInfo.Item2)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> Condition MaxAttempts
            WorkflowInput Source1 => #0
            SubscribeSubject Attempts => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            SubscribeSubject RewardInfo
            -> MemberSelector(Selector=Sequence.RewardAttempts) => #5
            #3, #5 -> Zip
            -> GreaterThanOrEqual
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #30
        SubscribeSubject RewardInfo
        -> MemberSelector(Selector=RewardInfo.Item1)
        -> NullOrUnrewarded
        -> Condition NoReward
            WorkflowInput Source1
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #35
        SubscribeSubject RewardInfo
        -> MemberSelector(Selector=Sequence.ResponseTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT3S)
        -> BooleanProperty(Value=false) => #41
        SubscribeSubject SustainedSampleOnset => #42
        SubscribeSubject RewardInfo
        -> MemberSelector(Selector=Sequence.RewardAvailablePokeReset) => #44
        #42, #44 -> Zip
        -> Condition RewardPokeTrial
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #47
        #14, #17, #27, #30, #35, #41, #47 -> Merge => #48
        SubscribeSubject RewardInfo
        -> MemberSelector(Selector=Sequence) => #50
        #48, #50 -> Zip
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject RewardPort0 => #54
        SubscribeSubject RewardPort1 => #55
        #54, #55 -> Merge
        -> IntProperty(Value=1)
        -> Accumulate => #58
        IntProperty(Value=0) => #59
        #58, #59 -> Merge
        -> BehaviorSubject Attempts
    -> Sink UpdatePerformance => #13
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject TrialCorrectResult
        -> WorkflowOutput
    #9 -> Condition TrialInvalid
        WorkflowInput Source1
        -> MemberSelector(Selector=TrialComplete)
        -> BitwiseNot
        -> WorkflowOutput
    -> MemberSelector(Selector="TrialComplete,Sequence")
    -> Take(Count=1)
    -> Sink UpdatePerformance => #17
        WorkflowInput Source1
        -> MemberSelector(Selector=Item1)
        -> MulticastSubject TrialCorrectResult
        -> WorkflowOutput
    #13, #17 -> Merge
    -> MemberSelector(Selector=Item2)
    -> SelectMany Reset
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject SequenceInfo

        SubscribeSubject SequenceInfo
        -> StringProperty(Value=Reset)
        -> MulticastSubject ExperimentEvents
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2"))
        -> MulticastSubject BehaviorCommands
        -> StringProperty(Value=Zero)
        -> MulticastSubject OlfactometerCommand => #9
        SubscribeSubject SequenceInfo
        -> MemberSelector(Selector=InterTrialInterval)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #13
        #9, #13 -> Delay(DueTime=PT3S)
        -> StringProperty(Value=Default)
        -> MulticastSubject OlfactometerCommand
        -> Take(Count=1)
        -> WorkflowOutput
    -> Take(Count=1)
    -> WorkflowOutput
-> Concat
-> Repeat

SubscribeSubject PerformanceAverage => #47
SubscribeSubject CurrentSequences => #48
#47, #48 -> WithLatestFrom
-> Condition CriterionMet
    WorkflowInput Source1 => #0
    -> MemberSelector(Selector=Item1.Val0) => #1
    #0 -> MemberSelector(Selector=Item2.PerformaceCriterion) => #2
    #1, #2 -> Zip
    -> GreaterThanOrEqual
    -> WorkflowOutput
-> MemberSelector(Selector=Item2.NextSequence)
-> MulticastSubject LoadNewSequence

SubscribeSubject OlfactometerCommand
SubscribeSubject ExperimentEvents

ExternalizedMapping(Filter(DisplayName=EndSessionKey))
-> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause Space Prior PageUp Next PageDown End D0 D1 D2 D3 Control", SuppressRepetitions=false)
-> Take(Count=1)
-> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Disabled))
-> MulticastSubject CommandsO0
-> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Disabled))
-> MulticastSubject CommandsO1
-> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2"))
-> MulticastSubject BehaviorCommands
-> StringProperty(Value=Default)
-> MulticastSubject OlfactometerCommand
-> WorkflowOutput

SubscribeSubject RewardCommand => #67
-> Condition R1
    WorkflowInput Source1
    -> MemberSelector(Selector=RewardPosition)
    -> Equal(Operand=IntProperty(Value=0))
    -> WorkflowOutput
-> IntProperty(Value=1) => #69
IntProperty(Value=0) => #70
#69, #70 -> Merge
-> Accumulate => #72
#67 -> Condition R2
    WorkflowInput Source1
    -> MemberSelector(Selector=RewardPosition)
    -> Equal(Operand=IntProperty(Value=1))
    -> WorkflowOutput
-> IntProperty(Value=1) => #74
#74, #70 -> Merge
-> Accumulate => #76
#72, #76 -> CombineLatest
-> Format(Format="R1: {0}, R2: {1}", Selector="Item1,Item2")

StringProperty(Value=Start)
-> BehaviorSubject ExperimentEvents
