<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.Olfactometer;assembly=Harp.Olfactometer"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p3="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Olfactometer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>CommandsO0</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="PortO0" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM10</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="EventsO0" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>EventsO0</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>CommandsO1</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="PortO1" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM13</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="EventsO1" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>EventsO1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="OlfactometerEvents" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>OlfactometerEvents</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="SessionSettings" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>OlfactometerCommands</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:ParseOlfactometerCommand" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>OlfactometerCommand</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ValvesO0</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="OdorValveState" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateOdorValveStatePayload">
                      <p1:OdorValveState>None</p1:OdorValveState>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CommandsO0</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>4</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ValvesO1</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="OdorValveState" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateOdorValveStatePayload">
                      <p1:OdorValveState>None</p1:OdorValveState>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CommandsO1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>EndValvesO0</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="EndValveState" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateEndValveStatePayload">
                      <p1:EndValveState>EndValve0 EndValve1</p1:EndValveState>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CommandsO0</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>4</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>EndValvesO1</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="EndValveState" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p1:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p1:CreateEndValveStatePayload">
                      <p1:EndValveState>EndValve1</p1:EndValveState>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CommandsO1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="6" Label="Source1" />
                  <Edge From="0" To="11" Label="Source1" />
                  <Edge From="0" To="16" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="21" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="6" To="8" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="21" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="11" To="13" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="21" Label="Source3" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="16" To="18" Label="Source1" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source4" />
                  <Edge From="21" To="22" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Name</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:ToDictionary">
              <rx:KeySelector>Item2</rx:KeySelector>
              <rx:ElementSelector>Item1</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>CommandDictionary</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" DisplayName="OlfactometerCommand" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>OlfactometerCommand</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CommandDictionary</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="StringProperty">
                <Value>Purge</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="10" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="16" To="19" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="20" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="26" Label="Source1" />
            <Edge From="24" To="28" Label="Source1" />
            <Edge From="25" To="26" Label="Source2" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="29" Label="Source1" />
            <Edge From="28" To="29" Label="Source2" />
            <Edge From="29" To="30" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:LoadSessionSettings">
          <p2:Path>hypnose-session.yml</p2:Path>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p3:CreateDiscreteUniform">
          <p3:Lower>0</p3:Lower>
          <p3:Upper>1</p3:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>BinaryDiscrete</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>Default</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>OlfactometerCommand</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OlfactometerEvents</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SessionSettings</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Sequence</Selector>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SampleBinary</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BinaryDiscrete</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:Sample" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>RewardCondition1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2.Sequence.RewardCondition1</Selector>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>RewardCondition2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2.Sequence.RewardCondition2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:SampleValence" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ToArray" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>CurrentTrial</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CurrentTrial</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>TrialElements</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>PresentCommand</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Command</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>OlfactometerCommand</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SessionSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Sequence.PresentationTime</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.8S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="7" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>InterCommand</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SessionSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Sequence.InterCommand</Selector>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>OlfactometerCommand</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SessionSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Sequence.InterCommandTime</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="8" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>OlfactometerCommand</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="17" Label="Source2" />
      <Edge From="13" To="20" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="19" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="22" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>